20200615_143330 Scientist
Scientist
--{ RES }--
V;200
--{ CFG }--
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26,0;96 Well DWP 1 mL;TaraDWP
26,1;96 Well Microplate;AssayTara
32,0;96 Well Microplate;DilutionSample
32,1;96 Well Microplate;ActivityMTP
32,2;96 Well Microplate;AssayMTP
38,0;Eppi 1.5 mL 6x4 SBS;IPTG
38,1;96 Well Microplate;StandardMTP
38,2;96 Well DWP 1 mL;SampleDWP
44,0;96 Well DWP 1 mL;SupernatantDWP
44,1;12 Column Plate;SubstrateStandard
51,0;Trough 100 mL;NprE
51,1;Trough 100 mL;WaterTara
51,2;Trough 100 mL;Detector
52,0;Wash Station Cleaner shallow
52,1;Wash Station Waste
52,2;Wash Station Cleaner deep
53,0;Trough 100 mL;KPi-Buffer
53,1;Trough 100 mL;AssayReactionSolution
62,0;48 Well FP in BL;Cultivation
1;System
8;Hettich
5;Infinite 200
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--{ RPG }--
Group("StandardStock");
Aspirate(255,"Trough_Water_FD_AspLLT","250","250","250","250","250","250","250","250",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Water_DispZmax-1_AspLLT","250","250","250","250","250","250","250","250",0,0,0,0,44,1,1,"0C0800¬70000000000",0,0);
Aspirate(255,"Trough_Water_FD_AspLLT","125","125","125","125","125","125","125","125",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Water_DispZmax-1_AspLLT","125","125","125","125","125","125","125","125",0,0,0,0,44,1,1,"0C08000¨?000000000",0,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Aspirate(255,"Water_DispZmax-1_AspZmax-1","250","250","250","250","250","250","250","250",0,0,0,0,44,1,1,"0C080®300000000000",0,0);
Dispense(255,"Water_DispZmax-1_AspZmax-1","250","250","250","250","250","250","250","250",0,0,0,0,44,1,1,"0C0800¬70000000000",0,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(255,"Water_DispZmax-3_AspZmax-1","250","250","250","250","250","250","250","250",0,0,0,0,44,1,1,"0C0800¬70000000000",1,0,0);
Aspirate(255,"Water_DispZmax-1_AspZmax-1","125","125","125","125","125","125","125","125",0,0,0,0,44,1,1,"0C0800¬70000000000",0,0);
Dispense(255,"Water_DispZmax-1_AspZmax-1","125","125","125","125","125","125","125","125",0,0,0,0,44,1,1,"0C08000¨?000000000",0,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(255,"Water_DispZmax-3_AspZmax-1","100","100","100","100","100","100","100","100",0,0,0,0,44,1,1,"0C08000¨?000000000",1,0,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
GroupEnd();
Group("StandardDilution");
Aspirate(127,"Trough_Water_FD_AspLLT","180","160","120","100","80","40","20",0,0,0,0,0,53,0,1,"0108¯0",0,0);
Dispense(127,"Trough_Water_FD_AspLLT","180","160","120","100","80","40","20",0,0,0,0,0,38,1,1,"0C08¯0000000000000",0,0);
Aspirate(127,"Trough_Water_FD_AspLLT","80","70","60","50","40","30","20",0,0,0,0,0,53,0,1,"0108¯0",0,0);
Dispense(127,"Trough_Water_FD_AspLLT","80","70","60","50","40","30","20",0,0,0,0,0,38,1,1,"0C080®100000000000",0,0);
Aspirate(255,"Trough_Water_FD_AspLLT","90","85","80","75","70","200","200","200",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Trough_Water_FD_AspLLT","90","85","80","75","70","200","200","200",0,0,0,0,38,1,1,"0C0800¬70000000000",0,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Aspirate(255,"Trough_Water_FD_AspLLT","20","40","80","100","120","160","180","200",0,0,0,0,44,1,1,"0C08000¨?000000000",0,0);
Dispense(255,"Trough_Water_FD_AspLLT","20","40","80","100","120","160","180","200",0,0,0,0,38,1,1,"0C08¯1000000000000",0,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Aspirate(255,"Trough_Water_FD_AspLLT","120","130","140","150","160","170","180","200",0,0,0,0,44,1,1,"0C0800¬70000000000",0,0);
Dispense(255,"Trough_Water_FD_AspLLT","120","130","140","150","160","170","180","200",0,0,0,0,38,1,1,"0C080®300000000000",0,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Aspirate(31,"Trough_Water_FD_AspLLT","110","115","120","125","130",0,0,0,0,0,0,0,44,1,1,"0C080n000000000000",0,0);
Dispense(31,"Trough_Water_FD_AspLLT","110","115","120","125","130",0,0,0,0,0,0,0,38,1,1,"0C0800¬00000000000",0,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
GroupEnd();
Group("AssayBufferPreparation");
BeginLoop("9","AssaySolutionStandardMTP");
Aspirate(255,"Trough_Water_FD_AspLLT","180","180","180","180","180","180","180","180",0,0,0,0,53,1,1,"0108¯1",0,0);
Dispense(255,"Trough_Water_FD_AspLLT","180","180","180","180","180","180","180","180",0,0,0,0,38,1,1,"0C08000¨?000000000",1,"AssaySolutionStandardMTP",0,1,0);
EndLoop();
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("9","SubstrateStandardMTP");
Aspirate(255,"Trough_Water_FD_AspLLT","20","20","20","20","20","20","20","20",0,0,0,0,44,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"Trough_Water_FD_AspLLT","20","20","20","20","20","20","20","20",0,0,0,0,38,1,1,"0C08000¨?000000000",1,"SubstrateStandardMTP",0,1,0);
EndLoop();
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
GroupEnd();
Group("StandardAssay");
Mix(255,"Water_FD_AspZmax-1","150","150","150","150","150","150","150","150",0,0,0,0,38,1,1,"0C08¯1000000000000",1,0,0);
BeginLoop("3","StandardAssay_Col1");
Aspirate(255,"Water_DispZmax-1_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,38,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water_FD_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,38,1,1,"0C08000¨?000000000",1,"StandardAssay_Col1",0,1,0);
EndLoop();
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(255,"Water_FD_AspZmax-1","150","150","150","150","150","150","150","150",0,0,0,0,38,1,1,"0C080®300000000000",1,0,0);
BeginLoop("3","StandardAssay_Col2");
Aspirate(255,"Water_DispZmax-1_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,38,1,1,"0C080®300000000000",0,0);
Dispense(255,"Water_FD_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,38,1,1,"0C08000000p¯000000",1,"StandardAssay_Col2",0,1,0);
EndLoop();
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(255,"Water_FD_AspZmax-1","150","150","150","150","150","150","150","150",0,0,0,0,38,1,1,"0C0800¬70000000000",1,0,0);
BeginLoop("3","StandardAssay_Col3");
Aspirate(255,"Water_DispZmax-1_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,38,1,1,"0C0800¬70000000000",0,0);
Dispense(255,"Water_FD_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,38,1,1,"0C080000000000¬700",1,"StandardAssay_Col3",0,1,0);
EndLoop();
GroupEnd();
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
