20201130_131108 Scientist
Scientist
--{ RES }--
V;200
--{ CFG }--
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26,0;96 Well DWP 1 mL;TaraDWP
26,1;96 Well Microplate;AssayTara
32,0;96 Well Microplate;DilutionSample
32,1;96 Well Microplate;ActivityMTP
32,2;96 Well Microplate;AssayMTP
38,0;Eppi 1.5 mL 6x4 SBS;IPTG
38,1;96 Well Microplate;StandardMTP
38,2;96 Well DWP 1 mL;SampleDWP
44,0;96 Well DWP 1 mL;SupernatantDWP
44,1;12 Column Plate;SubstrateStandard
51,0;Trough 100 mL;NprE
51,1;Trough 100 mL;WaterTara
51,2;Trough 100 mL;Detector
52,0;Wash Station Cleaner shallow
52,1;Wash Station Waste
52,2;Wash Station Cleaner deep
53,0;Trough 100 mL;KPi-Buffer
53,1;Trough 100 mL;AssayReactionSolution
62,0;48 Well FP in BL;Cultivation
1;System
8;Hettich
5;Infinite 200
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--{ RPG }--
Command("O1SLO4,1",1,1,,,2,2,0);
Group("AssayBufferPreparation");
BeginLoop("12","AssaySolutionActivityMTP");
Aspirate(255,"Trough_Water_FD_AspLLT","180","180","180","180","180","180","180","180",0,0,0,0,53,1,1,"0108¯1",0,0);
Dispense(255,"Trough_Water_FD_AspLLT","180","180","180","180","180","180","180","180",0,0,0,0,32,1,1,"0C08¯1000000000000",1,"AssaySolutionActivityMTP",0,1,0);
EndLoop();
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("12","SubstrateActivityMTP");
Aspirate(255,"Water_FD_AspZmax-1","20","20","20","20","20","20","20","20",0,0,0,0,44,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water_FD_AspZmax-1","20","20","20","20","20","20","20","20",0,0,0,0,32,1,1,"0C08¯1000000000000",1,"SubstrateActivityMTP",0,1,0);
EndLoop();
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("32","5",1,0,0,0,0,"","96 Well Microplate","Narrow","","","MP 3Pos","","Infinite 200","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Subroutine("X:\CM\Pahpshmir_BL-sGFP-Cutinase-BSI\Pahpshmir_Reader37.esc",1);
GroupEnd();
Group("SampleDilution");
BeginLoop("6","5xDilutionBuffer");
Aspirate(255,"Trough_Water_FD_AspLLT","160","160","160","160","160","160","160","160",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Water_DispZmax-1_AspLLT","160","160","160","160","160","160","160","160",0,0,0,0,26,1,1,"0C08000000p¯000000",1,"5xDilutionBuffer",0,1,0);
EndLoop();
BeginLoop("12","10xDilutionBuffer");
Aspirate(255,"Trough_Water_FD_AspLLT","180","180","180","180","180","180","180","180",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Trough_Water_FD_AspLLT","180","180","180","180","180","180","180","180",0,0,0,0,32,0,1,"0C08¯1000000000000",1,"10xDilutionBuffer",0,1,0);
EndLoop();
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
BeginLoop("6","SampleDilution");
Aspirate(255,"Water_FD_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,44,0,1,"0C08¯1000000000000",1,"SampleDilution",0,1,0);
Dispense(255,"Water_DispZmax-1_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,26,1,1,"0C08000000p¯000000",1,"SampleDilution",0,1,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(255,"Water_FD_AspZmax-1","150","150","150","150","150","150","150","150",0,0,0,0,26,1,1,"0C08000000p¯000000",1,1,"SampleDilution",0,1,0);
Aspirate(255,"Water_FD_AspZmax-1","20","20","20","20","20","20","20","20",0,0,0,0,26,1,1,"0C08000000p¯000000",1,"SampleDilution",0,1,0);
Dispense(255,"Water_FD_AspZmax-1","20","20","20","20","20","20","20","20",0,0,0,0,32,0,1,"0C08¯1000000000000",1,"SampleDilution",0,1,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(255,"Water_FD_AspZmax-1","150","150","150","150","150","150","150","150",0,0,0,0,32,0,1,"0C08¯1000000000000",1,1,"SampleDilution",0,1,0);
Aspirate(255,"Water_FD_AspZmax-1","20","20","20","20","20","20","20","20",0,0,0,0,32,0,1,"0C08¯1000000000000",1,"SampleDilution",0,1,0);
Dispense(255,"Water_FD_AspZmax-1","20","20","20","20","20","20","20","20",0,0,0,0,32,0,1,"0C08000000p¯000000",1,"SampleDilution",0,1,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(255,"Water_FD_AspZmax-1","150","150","150","150","150","150","150","150",0,0,0,0,32,0,1,"0C08000000p¯000000",1,1,"SampleDilution",0,1,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
GroupEnd();
Group("AssayPreparation");
Subroutine("X:\CM\Pahpshmir_BL-sGFP-Cutinase-BSI\Pahpshmir_Reader37.esc",2);
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("5","32",1,0,0,0,0,"","96 Well Microplate","Narrow","","","Infinite 200","","MP 3Pos","1","(Not defined)","2");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
BeginLoop("6","Sample");
Aspirate(255,"Water_DispZmax-1_AspZmax-1","80","80","80","80","80","80","80","80",0,0,0,0,32,0,1,"0C08000000p¯000000",1,"Sample",0,1,0);
Dispense(255,"Water_FD_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,32,1,1,"0C08¯1000000000000",1,"Sample",0,1,0);
Dispense(255,"Water_FD_AspZmax-1","40","40","40","40","40","40","40","40",0,0,0,0,32,1,1,"0C08000000p¯000000",1,"Sample",0,1,0);
Wash(255,52,1,52,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
GroupEnd();
Group("ReaderMeasurementSamples");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("32","5",1,0,0,0,0,"","96 Well Microplate","Narrow","","","MP 3Pos","","Infinite 200","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Subroutine("X:\CM\Pahpshmir_BL-sGFP-Cutinase-BSI\Pahpshmir_CutinaseAssay_Standard.esc",1);
FACTS("ReaderNETwork","ReaderNETwork_Measure","X:\CM\Pahpshmir_BL-sGFP-cutinase-BSgetriggert\Cutinase_Sample.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="Admin" createdAt="2020-06-15T14:27:57.0224548Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="GRE96ft" plateWithCover="False">
<PlateRange range="A1:H12" auto="false">
<Temperature module="PLATE" temperature="370" switch="ON" />
<Shaking mode="Linear" time="PT20S" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<WaitTemperature module="PLATE" minTemperature="365" maxTemperature="375" maxWaitTimeSpan="P10675199DT2H48M5.4775807S" />
<MeasurementAbsorbance mode="Normal" name="ABS">
<MeasurementKinetic loops="2" timeSpan="PT25S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT40M" useDuration="true">
<Shaking mode="Linear" time="PT3S" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<Well auto="true">
<MeasurementReading refID="8" refTimeMaxDeviation="PT25S" refName="KINETIC.RUN.CYCLE" beamDiameter="700" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1_Copy1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4100" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementKinetic>
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("5","32",1,0,0,0,0,"","96 Well Microplate","Narrow","","","Infinite 200","","MP 3Pos","1","(Not defined)","2");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
GroupEnd();
Group("ReaderMeasurementStandard");
Subroutine("X:\CM\Pahpshmir_BL-sGFP-Cutinase-BSI\Pahpshmir_CutinaseAssay_Standard.esc",2);
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("38","5",1,0,0,0,0,"","96 Well Microplate","Narrow","","","MP 3Pos","","Infinite 200","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","X:\CM\Pahpshmir_BL-sGFP-cutinase-BSgetriggert\Cutinase_Standard.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="Admin" createdAt="2020-06-15T14:29:42.2365689Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="GRE96ft" plateWithCover="False">
<PlateRange range="A4:H12" auto="false">
<Temperature module="PLATE" temperature="370" switch="ON" />
<Shaking mode="Linear" time="PT20S" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<WaitTemperature module="PLATE" minTemperature="365" maxTemperature="375" maxWaitTimeSpan="P10675199DT2H48M5.4775807S" />
<Shaking mode="Linear" time="PT1M" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<MeasurementAbsorbance mode="Normal" name="ABS">
<Well auto="true">
<MeasurementReading beamDiameter="700" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1_Copy1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4100" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("5","38",1,0,0,0,0,"","96 Well Microplate","Narrow","","","Infinite 200","","MP 3Pos","1","(Not defined)","2");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
GroupEnd();
Command("O1SLO4,0",1,1,,,2,2,0);
