20200212_162526 Scientist
Scientist
--{ RES }--
V;200
--{ CFG }--
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26,0;96 Well DWP 1 mL;TaraDWP
26,1;96 Well Microplate;AssayTara
32,0;96 Well Microplate;DilutionSample
32,1;96 Well Microplate;ActivityMTP
32,2;96 Well Microplate;AssayMTP
38,0;Eppi 1.5 mL 6x4 SBS;IPTG
38,1;96 Well Microplate;StandardMTP
38,2;96 Well DWP 1 mL;SampleDWP
44,0;96 Well DWP 1 mL;SupernatantDWP
44,1;12 Column Plate;SubstrateStandard
51,0;Trough 100 mL;NprE
51,1;Trough 100 mL;WaterTara
51,2;Trough 100 mL;Detector
52,0;Wash Station Cleaner shallow
52,1;Wash Station Waste
52,2;Wash Station Cleaner deep
53,0;Trough 100 mL;KPi-Buffer
53,1;Trough 100 mL;AssayReactionSolution
62,0;48 Well FP in BL;Cultivation
1;System
8;Hettich
5;Infinite 200
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--{ RPG }--
Command("O1SLO4,1",1,1,,,2,2,0);
Group("UnloadCentrifuge");
FACTS("Hettich","Hettich_MoveToPos","3","0","");
FACTS("Hettich","Hettich_OpenDoor","","0","");
Vector("Align Centrifuge","8","1",0,1,0,0,1,0);
Transfer_Rack("8","26",1,0,0,0,0,"","96 Well DWP 1 mL","Narrow","","","Hettich","","MP 2Pos Bioshake","1","(Not defined)","1");
FACTS("Hettich","Hettich_CloseDoor","","0","");
FACTS("Hettich","Hettich_Centrifuge","50,1,9,9,30,false","0","");
FACTS("Hettich","Hettich_OpenDoor","","0","");
GroupEnd();
Group("Desinfect");
FACTS("SixWayValve","SixWayValve_SetToPosShortTravel","Position:2|","0","");
Wash(255,52,1,52,2,"50",500,"50",500,10,70,30,0,0,1000,0);
FACTS("SixWayValve","SixWayValve_SetToPosShortTravel","Position:1|","0","");
Wash(255,52,1,52,2,"20",500,"20",500,10,70,30,1,0,1000,0);
Wash(255,52,1,52,2,"5",500,"1",500,10,70,30,0,0,1000,0);
Wash(255,52,1,52,2,"20",500,"20",500,10,70,30,1,0,1000,0);
GroupEnd();
Command("O1SLO4,0",1,1,,,2,2,0);
