20200519_093052 Scientist
Scientist
--{ RES }--
V;200
--{ CFG }--
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26,0;96 Well DWP 1 mL;TaraDWP
26,1;96 Well Microplate;AssayTara
32,0;96 Well Microplate;DilutionSample
32,1;96 Well Microplate;ActivityMTP
32,2;96 Well Microplate;AssayMTP
38,0;Eppi 1.5 mL 6x4 SBS;IPTG
38,1;96 Well Microplate;StandardMTP
38,2;96 Well DWP 1 mL;SampleDWP
44,0;96 Well DWP 1 mL;SupernatantDWP
44,1;12 Column Plate;SubstrateStandard
51,0;Trough 100 mL;NprE
51,1;Trough 100 mL;WaterTara
51,2;Trough 100 mL;Detector
52,0;Wash Station Cleaner shallow
52,1;Wash Station Waste
52,2;Wash Station Cleaner deep
53,0;Trough 100 mL;KPi-Buffer
53,1;Trough 100 mL;AssayReactionSolution
62,0;48 Well FP in BL;Cultivation
1;System
8;Hettich
5;Infinite 200
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--{ RPG }--
Command("O1SLO4,1",1,1,,,2,2,0);
Group("CentrifugeSamples");
FACTS("Hettich","Hettich_MoveToPos","1","0","");
FACTS("Hettich","Hettich_OpenDoor","","0","");
Vector("Align Centrifuge","8","1",0,1,0,0,1,0);
Transfer_Rack("38","8",0,0,0,0,0,"","96 Well DWP 1 mL","Narrow","","","MP 3Pos","","Hettich","3","(Not defined)","1");
FACTS("Hettich","Hettich_CloseDoor","","0","");
FACTS("Hettich","Hettich_Centrifuge","4000,360,9,9,4,true","0","");
FACTS("Hettich","Hettich_MoveToPos","1","0","");
Worklist(0,X:\CM\Pahpshmir_BL-sGFP-cutinase-BSgetriggert\Processing.gwl,255,"Supernatant_AspZmax-5",0,0);Wash(255,52,1,52,2,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);DropDITI(0,-1,0,10,70,0);
FACTS("Hettich","Hettich_OpenDoor","","0","");
Vector("Align Centrifuge","8","1",0,1,0,0,1,0);
Transfer_Rack("8","38",1,0,0,0,0,"","96 Well DWP 1 mL","Narrow","","","Hettich","","MP 3Pos","1","(Not defined)","3");
FACTS("Hettich","Hettich_CloseDoor","","0","");
GroupEnd();
Group("TransferToSupernatantDWP");
Worklist(1,,0,"",0,0);Wash(255,52,1,52,2,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);DropDITI(0,-1,0,10,70,0);
MoveLiha(255,52,1,1,"0108¯1",0,4,0,10,0,0);
GroupEnd();
Command("O1SLO4,0",1,1,,,2,2,0);
