20200706_124917 Scientist
Scientist
--{ RES }--
V;200
--{ CFG }--
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26,0;96 Well DWP 1 mL;TaraDWP
26,1;96 Well Microplate;AssayTara
32,0;96 Well Microplate;DilutionSample
32,1;96 Well Microplate;ActivityMTP
32,2;96 Well Microplate;AssayMTP
38,0;Eppi 1.5 mL 6x4 SBS;IPTG
38,1;96 Well Microplate;StandardMTP
38,2;96 Well DWP 1 mL;SampleDWP
44,0;96 Well DWP 1 mL;SupernatantDWP
44,1;12 Column Plate;SubstrateStandard
51,0;Trough 100 mL;NprE
51,1;Trough 100 mL;WaterTara
51,2;Trough 100 mL;Detector
52,0;Wash Station Cleaner shallow
52,1;Wash Station Waste
52,2;Wash Station Cleaner deep
53,0;Trough 100 mL;KPi-Buffer
53,1;Trough 100 mL;AssayReactionSolution
62,0;48 Well FP in BL;Cultivation
1;System
8;Hettich
5;Infinite 200
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--{ RPG }--
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Temp\<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="Admin" createdAt="2020-07-06T12:49:04.4790128Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="GRE96fb_µClear" plateWithCover="False">
<PlateRange range="A1:H12" auto="false">
<Temperature module="PLATE" temperature="250" switch="ON" />
<Shaking mode="Linear" time="PT10M" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<WaitTime timeSpan="PT5M" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="False" />
<Shaking mode="Linear" time="PT10M" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<WaitTime timeSpan="PT5M" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="False" />
<Shaking mode="Linear" time="PT10M" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<WaitTime timeSpan="PT5M" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="False" />
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
